TITLE= Energy deposition kernel for 6.000 MeV photons
PEGS FILE= /opt/EGSnrc/HEN_HOUSE/pegs4/data/521icru.pegs4dat

:start I/O control:
IRESTART= first
STORE DATA ARRAYS= yes
PRINT OUT EDK FILE= yes
:stop I/O control:

:start Monte Carlo inputs:
NUMBER OF HISTORIES= 50000
INITIAL RANDOM NO. SEEDS= 12345, 23456
IFULL= ENERGY DEPOSITION KERNEL
DOPPLER BROADENING= On
:stop Monte Carlo inputs:

:start geometrical inputs:
 NUMBER OF CONES= 48
 ANGLES= 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75
        3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75
        3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75
        3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75
        3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75
        3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75, 3.75

 NUMBER OF SPHERES= 400
  RADII= 0.05, 0.1, 0.15, 0.2, 0.25, 0.3, 0.35, 0.4, 0.45, 0.5
        0.55, 0.6, 0.65, 0.7, 0.75, 0.8, 0.85, 0.9, 0.95, 1
        1.05, 1.1, 1.15, 1.2, 1.25, 1.3, 1.35, 1.4, 1.45, 1.5
        1.55, 1.6, 1.65, 1.7, 1.75, 1.8, 1.85, 1.9, 1.95, 2
        2.05, 2.1, 2.15, 2.2, 2.25, 2.3, 2.35, 2.4, 2.45, 2.5
        2.55, 2.6, 2.65, 2.7, 2.75, 2.8, 2.85, 2.9, 2.95, 3
        3.05, 3.1, 3.15, 3.2, 3.25, 3.3, 3.35, 3.4, 3.45, 3.5
        3.55, 3.6, 3.65, 3.7, 3.75, 3.8, 3.85, 3.9, 3.95, 4
        4.05, 4.1, 4.15, 4.2, 4.25, 4.3, 4.35, 4.4, 4.45, 4.5
        4.55, 4.6, 4.65, 4.7, 4.75, 4.8, 4.85, 4.9, 4.95, 5
        5.05, 5.1, 5.15, 5.2, 5.25, 5.3, 5.35, 5.4, 5.45, 5.5
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        19.55, 19.6, 19.65, 19.7, 19.75, 19.8, 19.85, 19.9, 19.95, 20
 CAVITY ZONES= 0

MEDIA= H2O521ICRU;

MEDNUM= 1
START REGION= 2
STOP REGION= 19201
:stop geometrical inputs:

:start source inputs:
INCIDENT PARTICLE= photon
INCIDENT ENERGY= monoenergetic
INCIDENT KINETIC ENERGY(MEV)= 6.000000
SOURCE NUMBER= 0
:stop source inputs:

:start MC transport parameter:
Global ECUT= 0.521
Global PCUT= 0.01
Global SMAX= 0.0
ESTEPE= 0.25
XImax= 0.0
Skin depth for BCA= 3
Boundary crossing algorithm= EXACT
Electron-step algorithm= PRESTA-II
Spin effects= on
Bremsstrahlung angular sampling= simple
Bound Compton scattering= on
Pair angular sampling= on
Electron impact ionization= on
:stop MC transport parameter:
